sv:Ph/Default/Modules                   = 1 "g4em-standard_opt4"
b:Ts/PauseBeforeQuit    = "True"
i:Ts/NumberOfThreads    = -1
i:Ts/Seed = 2
b:Ts/UseQT  = "True"

s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 1024
i:Gr/ViewA/WindowSizeY      = 768
d:Gr/ViewA/Theta            = 0 deg
d:Gr/ViewA/Phi              = 90 deg
s:Gr/ViewA/Projection       = "Orthogonal"
d:Gr/ViewA/PerspectiveAngle = 30 deg
#u:Gr/ViewA/Zoom             = 10000.
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

s:Gr/ViewB/Type             = "OpenGL"
i:Gr/ViewB/WindowSizeX      = 1024
i:Gr/ViewB/WindowSizeY      = 768
d:Gr/ViewB/Theta            = 75 deg
d:Gr/ViewB/Phi              = 10 deg
s:Gr/ViewB/Projection       = "Perspective"
d:Gr/ViewB/PerspectiveAngle = 30 deg
u:Gr/ViewB/Zoom             = 3.
b:Gr/ViewB/HiddenLineRemovalForTrajectories = "True"
  
d:Ge/World/HLX          =  11.25 mm
d:Ge/World/HLY          = 11.25 mm
d:Ge/World/HLZ          = 11.25 mm
s:Ge/World/Material     = "Vacuum"
b:Ge/World/Invisible    = "False"
                      
s:Ge/EnclosingBox/Type          = "TsBox"
s:Ge/EnclosingBox/Parent        = "World"
d:Ge/EnclosingBox/HLX           = 7.5 mm
d:Ge/EnclosingBox/HLY           = 7.5 mm
d:Ge/EnclosingBox/HLZ           = 7.5 mm
d:Ge/EnclosingBox/TransX        = 0 mm
d:Ge/EnclosingBox/TransY        = 0 mm
d:Ge/EnclosingBox/TransZ        = 0 mm
d:Ge/EnclosingBox/RotX          = 0 deg
d:Ge/EnclosingBox/RotY          = 0 deg
d:Ge/EnclosingBox/RotZ          = 0 deg
s:Ge/EnclosingBox/Material      = "Vacuum"
s:Ge/EnclosingBox/Color             = "Yellow"

s:Ge/EnclosingBox/Field                  = "TsElectricFieldMap"
s:Ge/EnclosingBox/ElectricField3DTable   = "../../non-uniform_efield_tables/sphere_plates_testing.TABLE"
              
s:Ge/PlaneUpper/Parent            = "EnclosingBox"
s:Ge/PlaneUpper/Type              = "TsBox"
s:Ge/PlaneUpper/Material          = "G4_Cu" 
d:Ge/PlaneUpper/HLX               = 7.5 mm
d:Ge/PlaneUpper/HLY               = 7.5 mm
d:Ge/PlaneUpper/HLZ               = 0.25 mm
d:Ge/PlaneUpper/TransX            = 0 mm
d:Ge/PlaneUpper/TransY            = 0 mm
d:Ge/PlaneUpper/TransZ            = -7.25 mm
s:Ge/PlaneUpper/DrawingStyle = "solid"

s:Ge/PlaneLower/Parent            = "EnclosingBox"
s:Ge/PlaneLower/Type              = "TsBox"
s:Ge/PlaneLower/Material          = "G4_Cu" 
d:Ge/PlaneLower/HLX               = 7.5 mm
d:Ge/PlaneLower/HLY               = 7.5 mm
d:Ge/PlaneLower/HLZ               = 0.25 mm
d:Ge/PlaneLower/TransX            = 0 mm
d:Ge/PlaneLower/TransY            = 0 mm
d:Ge/PlaneLower/TransZ            = 7.25 mm
s:Ge/PlaneLower/DrawingStyle = "solid"
            
s:Ge/MiddleSphere/Parent            = "EnclosingBox"
s:Ge/MiddleSphere/Type              = "TsSphere"
s:Ge/MiddleSphere/Material          = "G4_Cu" 
d:Ge/MiddleSphere/RMax              = 6 mm
d:Ge/MiddleSphere/TransX            = 0 mm
d:Ge/MiddleSphere/TransY            = 0 mm
d:Ge/MiddleSphere/TransZ            = 0 mm
s:Ge/MiddleSphere/DrawingStyle = "solid"

